PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  color = 0.8431, 0.8588, 0.8431
  expName = test
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine age_form
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    TextComponent age_question
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = What is your age?
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    TextboxComponent age_input
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      placeholder = Type your answer here...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent inout
      bold = True
      fillColor = -0.4902, 0.3961, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Enter
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        age = age_input.text
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gender_form
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    TextComponent gender
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = What is your gender?
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    SliderComponent slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ["Male", "Female", "Non-binary", "Self-describe", "Prefer not to say"]
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      fillColor = -0.4902, 0.3961, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Enter
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  Routine orientation_form
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    TextComponent orientation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = What is your sexual orientation?
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    SliderComponent orientation_rating
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ["Heterosexual", "Homosexual", "Bisexual", "Asexual", "Other", "Prefer not to say"]
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6)
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    TextboxComponent orientation_other_input
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      placeholder = Type your answer here...
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      fillColor = -0.4902, 0.3961, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Enter
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        orientation_other_input.setAutoDraw(False)
      Each Frame:
        if orientation_rating.getRating() == 5:
            orientation_other_input.setAutoDraw(True)
        else:
            orientation_other_input.setAutoDraw(False)
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine education_form
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = What is your highest level of education completed?
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    SliderComponent education_rating
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ["< High school", "Some college", "Bachelor's", "Master's+"]
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = choice
      ticks = (1, 2, 3, 4)
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      fillColor = -0.4902, 0.3961, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here
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  Routine relationship_status_form
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = What is your current relationship status?
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    SliderComponent slider_2
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ["Single", "In a relationship", "Married", "Divorced", "Other"]
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_4
      bold = True
      fillColor = -0.4902, 0.3961, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here
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  Routine past_relationships_form
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How many romantic relationships have you had in the past?
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    TextboxComponent num_relationships_input
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      placeholder = enter your answer
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        num_relationships = num_relationships_input.text
    ButtonComponent button_6
      bold = True
      fillColor = -0.4902, 0.3961, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here
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  Routine romantic_interest_form
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Are you currently interested in pursuing a romantic relationship?
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    SliderComponent romantic_interest
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ["Long-term", "Short-term", "Not interested"]
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_5
      bold = True
      fillColor = -0.4902, 0.3961, -0.6314
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here
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Flow
  Routine age_form
  Routine gender_form
  Routine orientation_form
  Routine education_form
  Routine relationship_status_form
  Routine past_relationships_form
  Routine romantic_interest_form
